MacroName Notifications

# Test:
CallFunction Notifications::SendMessage Test message
CallFunction Notifications::SendStart

Function SendMessage 0 1 Text
   Try
      CallFunction NotificationsV2::SendMessage $Text
   Catch
      Echo NotificationsV2 failed with $Text
      MakeDirectory $MessageDir
      # Make sure there is a message file to append to
      OldMessages = { "" }
      OpenTextFile MessageFile T 0 $MessagePath
      IF $reportedValue1 == 1
         CloseTextFile MessageFile
      ELSEIF $reportedValue1 == 0
         OpenTextFile MessageFile W 0 $MessagePath
         CloseTextFile MessageFile
      ENDIF
      # Append to the file so multiple messages aren't overwritten
      OpenTextFile MessageFile A 0 $MessagePath
      WriteLineToFile MessageFile $Text
      FlushTextFile MessageFile
      CloseTextFile MessageFile
   EndTry
EndFunction

Function SendStart 0 0
   ReportNumTableItems
   NumNavItems = $reportedvalue1
   EstimatedCaptureHours = 0
   NumTiles = 0
   IF $NumNavItems < 1
      echo
      echo Nav table does not have items indicating total capture time.
      NumTiles = 0
   ELSE
      ReportNumMontagePieces 1
      NumTiles = $reportedvalue1
      
      IF $NumTiles == 1
         echo "Montage claims to have only one image. Using 1 hour as timeframe"
         EstimatedCaptureHours = 1
      ELSE    
         EstimatedCaptureTime = $NumTiles * $SecondsPerTile
         EstimatedCaptureHours =  $EstimatedCaptureTime / (60 * 60)
      ENDIF
   ENDIF
   echo .  Estimating $EstimatedCaptureHours hours to complete
   CallFunction Notifications::SendMessage Started: Capturing $NumTiles images on $ScopeName. Estimating $EstimatedCaptureHours hours to complete
EndFunction

Function SendStop 0 0
   CallFunction Notifications::SendMessage Copied: $CaptureDir copied from $ScopeName to DROPBOX.
EndFunction