MacroName ScopeUtil

# Globally set the variable $ScopeName
ScopeName = TEM2

# Globally set the variable $MessageDir
MessageDir = \\192.168.3.10\Dropbox\Notification\$ScopeName

# Globally set the variable $MessagePath
MessagePath = $MessageDir\message.txt

# Globally set the variable $DropboxPath
DropboxPath = Y:

# Globally set the variable $CopyDir
CopyPath = $DropboxPath\TEMXcopy

# Globally set the variable $DataPath
DataPath = G:

# Globally set the variable PrecookMontageD
PrecookMontageD = 0

# Globally set the variable SecondsPerTile
SecondsPerTile = 15

# Globally set the variable MaxPercentChangeOverCapture
MaxPercentChangeOverCapture = 0.15